OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Lua Stimulator => #0
  Lua Script = ${Player_ScenarioDirectory}/AX-CPT.lua
  Duration = 1200
  Up_Time = 0.5
  Between_Time = 0.5
  Padding_Time = 0.2
  PA = 0.8
  PAX = 0.75
  PBX = 0.5
-> Player Controller
  Stimulation name = OVTK_GDF_End_Of_Session
  Action to perform = Stop
#0 -> Python Cue Display
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/Show_letter.py
  Window_width = 800
  Window_length = 600
  Font_size = 48
  Font_color = White
Python Keyboard Listener => #3
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/keyboard_input.py
Input stimulations 1=#3, Input stimulations 2=#0 -> Stimulation multiplexer => #4
Acquisition client => #5
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream=#5.Signal stream, Stimulations stream=#4 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/Data/EMMPOL18/Name/CSV-AX-CPT-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input Signal=#5.Signal stream, Input Stimulations=#4 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/Data/EMMPOL18/Name/AX-CPT-[$core{date}-$core{time}].ov
  Use compression = false
